<?xml version="1.0" standalone="no"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices">
        <iodevice type="mouse_input" tag="Mouse Input Device" mouse_position_x="eye_x" mouse_position_y="eye_y" mouse_down="mouse_click" hide_cursor="NO"></iodevice>
        <iodevice tag="Fake Monkey" spike_rate="" priority="" type="fake_monkey" alt="">
            <iochannel tag="Juice" variable="reward" type="juice"></iochannel>
        </iodevice>
    </io_devices>
    <variables tag="Variables">
        <folder tag="reward">
            <variable tag="reward_max" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="500" type="float"></variable>
            <variable tag="reward_slope" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="50" type="float"></variable>
            <variable tag="reward_min" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="100" type="float"></variable>
            <variable tag="reward_duration" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="reward_min" type="float"></variable>
        </folder>
        <folder tag="fixation">
            <variable tag="wait_fixation_time" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0.5" type="float"></variable>
            <variable tag="fixation_duration" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="2000" type="float"></variable>
            <variable tag="eye_in_window" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="integer"></variable>
            <variable tag="fix_window" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="1" type="float"></variable>
            <variable tag="eye_x" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="float"></variable>
            <variable tag="eye_y" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="float"></variable>
        </folder>
        <variable tag="mouse_click" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="any"></variable>
        <variable tag="screen_aspect_ratio" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="16/9" type="float"></variable>
        <folder tag="wedge">
            <variable tag="wedge_width" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="35.316" type="float"></variable>
        </folder>
        <folder tag="checkerboard">
            <variable tag="deg_per_sec" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="180" type="float"></variable>
            <variable tag="checkerboard_size" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="20" type="float"></variable>
        </folder>
        <folder tag="trial">
            <variable tag="ITI" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0.5" type="any"></variable>
            <variable tag="failed" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="integer"></variable>
            <variable type="selection" tag="meridian_selector" values="0,1" selection="sequential" nsamples="1" sampling_method="cycles" advance_on_accept="YES" autoreset="YES" _error="Each variable must be a assigned a scope (local or global)"></variable>
            <variable tag="reward" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="any"></variable>
            <variable tag="success" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="integer"></variable>
            <variable tag="ignore" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="integer"></variable>
            <variable tag="fixation_breaks" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="any"></variable>
            <variable tag="consecutive_successes" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="float"></variable>
            <variable tag="trial_duration" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="10" type="float"></variable>
        </folder>
    </variables>
    <sounds tag="Sounds"></sounds>
    <stimuli tag="Stimuli">
        <stimulus type="fixation_point" tag="fixation_point" color="0,0,0" trigger_width="fix_window" trigger_watch_x="eye_x" trigger_watch_y="eye_y" trigger_flag="eye_in_window" x_size="0.1" y_size="0.1" x_position="0" y_position="0" rotation="0.0" alpha_multiplier="1.0"></stimulus>
        <stimulus_group tag="wedges">
            <stimulus type="image_file" tag="wedge_vm" path="vm.png" x_size="wedge_width" y_size="wedge_width" x_position="0.0" y_position="0.0" rotation="0.0" alpha_multiplier="1.0" deferred="NO"></stimulus>
            <stimulus type="image_file" tag="wedge_hm" path="hm.png" x_size="wedge_width" y_size="wedge_width" x_position="0.0" y_position="0.0" rotation="0.0" alpha_multiplier="1.0" deferred="NO"></stimulus>
        </stimulus_group>
        <stimulus type="frame_list" tag="frame_list" stimulus_group="frames" ending="" ended="" loop="YES" repeats="0" autoplay="YES"></stimulus>
        <stimulus_group tag="frames">
            <stimulus type="image_file" tag="checkerboard" path="checkerboard.png" x_size="wedge_width/screen_aspect_ratio" y_size="wedge_width/screen_aspect_ratio" x_position="0.0" y_position="0.0" rotation="(now() / 1e6) * deg_per_sec" alpha_multiplier="1.0" deferred="NO"></stimulus>
        </stimulus_group>
    </stimuli>
    <filters tag="Filters"></filters>
    <optimizers tag="Optimizers"></optimizers>
    <experiment tag="checkerboard_mapping" full_name="HM/VM checkerboard mapping" description="">
        <protocol tag="Mapping" nsamples="1" sampling_method="cycles" selection="random_without_replacement" interruptible="YES">
            <trial tag="Stimulate at meridian" nsamples="50" sampling_method="cycles" selection="sequential" interruptible="YES">
                <task_system tag="Keep fixation task system" interruptible="YES">
                    <task_system_state tag="Initialize stimuli and IO" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action type="report" tag="Report start I/O" message="*** START STIM=$meridian_selector, START I/O ***"></action>
                        <action tag="Start Mouse" type="start_device_IO" device="Mouse Input Device"></action>
                        <action tag="Queue rotating checkerboard" type="live_queue_stimulus" stimulus="frame_list"></action>
                        <action tag="Queue wedge mask" type="live_queue_stimulus" stimulus="wedges[meridian_selector]"></action>
                        <action tag="Update display" type="update_stimulus_display" predicted_output_time=""></action>
                        <action type="start_timer" tag="Start stimulus timer" timer="stimulus_duration" timebase="" duration="trial_duration" duration_units="s"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="direct" tag="Go to &quot;Wait for fixation&quot;" target="Wait for fixation"></transition>
                    </task_system_state>
                    <task_system_state tag="Wait for fixation" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action tag="Turn on fixation point" type="live_queue_stimulus" stimulus="fixation_point"></action>
                        <action tag="Update Stimulus Display" type="update_stimulus_display" predicted_output_time=""></action>
                        <action type="report" tag="Report waiting" message="*** WAITING FOR FIXATION ***"></action>
                        <action type="wait" tag="Wait" duration="wait_fixation_time" duration_units="s"></action>
                        <action type="report" tag="Report ignored" message="*** IGNORED ***"></action>
                        <action type="assignment" tag="Increase ignored counter" variable="ignore" value="ignore+1"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="conditional" tag="After acquiring fixation go to &quot;Keep fixation&quot;" condition="eye_in_window == 1" target="Keep fixation"></transition>
                        <transition type="timer_expired" tag="Switch stimulus after timer 1" target="Exit state system" timer="stimulus_duration"></transition>
                        <transition type="direct" tag="Always Go to Wait for fixation" target="Wait for fixation"></transition>
                    </task_system_state>
                    <task_system_state tag="Keep fixation" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action type="report" tag="Report keeping fixation" message="*** KEEPING FIXATION ***"></action>
                        <action type="start_timer" tag="Start fixation timer" timer="fixation" timebase="" duration="fixation_duration" duration_units="ms"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="timer_expired" tag="Give reward after successful fixation" target="Give reward" timer="fixation"></transition>
                        <transition type="timer_expired" tag="Switch stimulus after timer 2" target="Exit state system" timer="stimulus_duration"></transition>
                        <transition type="conditional" tag="Go to &quot;Broke fixation&quot; after fixation break" condition="(eye_in_window == 0)" target="Broke fixation"></transition>
                    </task_system_state>
                    <task_system_state tag="Give reward" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action type="assignment" tag="Assign Variable" variable="reward_duration" value="min(reward_slope*consecutive_successes+reward_min, reward_max)"></action>
                        <action type="pulse" tag="Pulse Variable" variable="reward" duration="reward_duration"></action>
                        <action type="report" tag="Report reward" message="*** REWARD=$reward_duration ***"></action>
                        <action type="assignment" tag="Increase consecutive corrects" variable="consecutive_successes" value="consecutive_successes+1"></action>
                        <action type="assignment" tag="Count success" variable="success" value="success+1"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="conditional" tag="If still fixating go to &quot;Keep fixation&quot;" condition="eye_in_window" target="Keep fixation"></transition>
                        <transition type="conditional" tag="If not got to &quot;broke fixation&quot;" condition="eye_in_window == 0" target="Broke fixation"></transition>
                    </task_system_state>
                    <task_system_state tag="Broke fixation" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action type="report" tag="Report" message="*** BROKE FIXATION ***"></action>
                        <action type="assignment" tag="Count break fixations" variable="fixation_breaks" value="fixation_breaks+1"></action>
                        <action type="assignment" tag="Reset consecutive corrects" variable="consecutive_successes" value="0"></action>
                        <action tag="Dequeue Stimulus" type="dequeue_stimulus" stimulus="fixation_point"></action>
                        <action tag="Update Stimulus Display 2" type="update_stimulus_display" predicted_output_time=""></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="timer_expired" tag="Switch stimulus after timer 3" target="Exit state system" timer="stimulus_duration"></transition>
                        <transition type="direct" tag="Go to &quot;Wait for fixation&quot;" target="Wait for fixation"></transition>
                    </task_system_state>
                    <task_system_state tag="Exit state system" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action tag="Dequeue fixation point" type="dequeue_stimulus" stimulus="fixation_point"></action>
                        <action tag="Dequeue checkerboard" type="dequeue_stimulus" stimulus="frame_list"></action>
                        <action tag="Dequeue wedge" type="dequeue_stimulus" stimulus="wedges[meridian_selector]"></action>
                        <action tag="Update display" type="update_stimulus_display" predicted_output_time=""></action>
                        <action type="wait" tag="Wait 2" duration="ITI" duration_units="s"></action>
                        <action tag="Select next stimulus" type="next_selection" selection="meridian_selector"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition tag="Return to parent task system" type="yield"></transition>
                    </task_system_state>
                </task_system>
            </trial>
        </protocol>
    </experiment>
</monkeyml>